<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>OutputExpanderEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TriggeredCameraController</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>FrameRate</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConfigurePwm">
          <p1:PwmChannels>Pwm0</p1:PwmChannels>
          <p1:Frequency>20</p1:Frequency>
          <p1:DutyCycle>50</p1:DutyCycle>
          <p1:PulseCount>0</p1:PulseCount>
          <p1:TriggerSource>Software</p1:TriggerSource>
          <p1:EventConfig>Enabled</p1:EventConfig>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OutputExpanderCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePwmAndStimEnablePayload">
          <p1:PwmAndStimEnable>Pwm0ToOut1</p1:PwmAndStimEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OutputExpanderCommands</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
        <rx:Name>CameraState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePwmStartPayload">
          <p1:PwmStart>Pwm0</p1:PwmStart>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePwmStopPayload">
          <p1:PwmStop>Pwm0</p1:PwmStop>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OutputExpanderCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="7" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>