<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>OutputExpanderCommands</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OutputExpanderEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OutputExpanderEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateExpansionBoardPayload">
          <p1:ExpansionBoard>MagneticEncoder</p1:ExpansionBoard>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OutputExpanderCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMagneticEncoderSampleRatePayload">
          <p1:MagneticEncoderSampleRate>SampleRate100Hz</p1:MagneticEncoderSampleRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OutputExpanderCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OutputExpanderEvents</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:MagneticEncoder" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>FilterOnMagnitude</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Magnitude</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt16">
                <Value>50</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Angle</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>16384</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>6.28318530718</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MagnetEncoderData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MagnetEncoderData</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Wrap2pi</scr:Name>
        <scr:Expression>((it + 3*Math.Pi) % (2*Math.Pi)) - Math.Pi</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>NormalizeToTurns</scr:Name>
        <scr:Expression>it / (Math.Pi * 2)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>AccumulatedMagnetTurns</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AccumulatedCommutatorTurns</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Interval" DisplayName="CorrectionSamplingInterval" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT2S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="TurnDifferenceThreshold" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CommutatorCorrection</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CommutatorTurns</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>