<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Sockets.Bonsai;assembly=OpenEphys.Sockets.Bonsai"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:TcpServer">
          <p1:Name>AmpliferServer</p1:Name>
          <p1:Port>9001</p1:Port>
          <p1:Address>localhost</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
          <onix1:Name>BreakoutBoard</onix1:Name>
          <onix1:Heartbeat>
            <onix1:DeviceName>BreakoutBoard/Heartbeat</onix1:DeviceName>
            <onix1:DeviceAddress>0</onix1:DeviceAddress>
            <onix1:BeatsPerSecond>1000</onix1:BeatsPerSecond>
          </onix1:Heartbeat>
          <onix1:AnalogIO>
            <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
            <onix1:DeviceAddress>6</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:InputRange0>TenVolts</onix1:InputRange0>
            <onix1:InputRange1>TenVolts</onix1:InputRange1>
            <onix1:InputRange2>TenVolts</onix1:InputRange2>
            <onix1:InputRange3>TenVolts</onix1:InputRange3>
            <onix1:InputRange4>TenVolts</onix1:InputRange4>
            <onix1:InputRange5>TenVolts</onix1:InputRange5>
            <onix1:InputRange6>TenVolts</onix1:InputRange6>
            <onix1:InputRange7>TenVolts</onix1:InputRange7>
            <onix1:InputRange8>TenVolts</onix1:InputRange8>
            <onix1:InputRange9>TenVolts</onix1:InputRange9>
            <onix1:InputRange10>TenVolts</onix1:InputRange10>
            <onix1:InputRange11>TenVolts</onix1:InputRange11>
            <onix1:Direction0>Input</onix1:Direction0>
            <onix1:Direction1>Input</onix1:Direction1>
            <onix1:Direction2>Input</onix1:Direction2>
            <onix1:Direction3>Input</onix1:Direction3>
            <onix1:Direction4>Input</onix1:Direction4>
            <onix1:Direction5>Input</onix1:Direction5>
            <onix1:Direction6>Input</onix1:Direction6>
            <onix1:Direction7>Input</onix1:Direction7>
            <onix1:Direction8>Input</onix1:Direction8>
            <onix1:Direction9>Input</onix1:Direction9>
            <onix1:Direction10>Input</onix1:Direction10>
            <onix1:Direction11>Input</onix1:Direction11>
          </onix1:AnalogIO>
          <onix1:DigitalIO>
            <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
            <onix1:DeviceAddress>7</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:DeadTime>0</onix1:DeadTime>
            <onix1:SampleRate xsi:nil="true" />
          </onix1:DigitalIO>
          <onix1:ClockOutput>
            <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
            <onix1:DeviceAddress>5</onix1:DeviceAddress>
            <onix1:ClockGate>false</onix1:ClockGate>
            <onix1:Frequency>1000000</onix1:Frequency>
            <onix1:DutyCycle>50</onix1:DutyCycle>
            <onix1:Delay>0</onix1:Delay>
          </onix1:ClockOutput>
          <onix1:HarpInput>
            <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
            <onix1:DeviceAddress>12</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:Source>Breakout</onix1:Source>
          </onix1:HarpInput>
          <onix1:MemoryMonitor>
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
            <onix1:DeviceAddress>10</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
          </onix1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureHeadstageNeuropixelsV2e">
          <onix1:Name>HeadstageNeuropixelsV2e</onix1:Name>
          <onix1:NeuropixelsV2e>
            <onix1:DeviceName>HeadstageNeuropixelsV2e/NeuropixelsV2e</onix1:DeviceName>
            <onix1:DeviceAddress>256</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:ConfigurationA xsi:type="onix1:NeuropixelsV2QuadShankProbeConfiguration">
              <onix1:InvertPolarity>true</onix1:InvertPolarity>
              <onix1:GainCalibrationFileName>D:\calibrations\23176523171\23176523171_gainCalValues.csv</onix1:GainCalibrationFileName>
              <onix1:Reference>External</onix1:Reference>
              <onix1:ProbeInterfaceFileName>D:\calibrations\23176523171\pi_configuration.json</onix1:ProbeInterfaceFileName>
            </onix1:ConfigurationA>
            <onix1:ConfigurationB xsi:type="onix1:NeuropixelsV2QuadShankProbeConfiguration">
              <onix1:InvertPolarity>true</onix1:InvertPolarity>
              <onix1:Reference>External</onix1:Reference>
            </onix1:ConfigurationB>
          </onix1:NeuropixelsV2e>
          <onix1:Bno055>
            <onix1:DeviceName>HeadstageNeuropixelsV2e/PolledBno055</onix1:DeviceName>
            <onix1:DeviceAddress>257</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:AxisMap>YZX</onix1:AxisMap>
            <onix1:AxisSign>MirrorY MirrorX</onix1:AxisSign>
          </onix1:Bno055>
          <onix1:Port>PortA</onix1:Port>
          <onix1:PortVoltage>
            <onix1:Requested xsi:nil="true" />
          </onix1:PortVoltage>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>1048576</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV2eData">
          <onix1:DeviceName>HeadstageNeuropixelsV2e/NeuropixelsV2e</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
          <onix1:ProbeIndex>ProbeA</onix1:ProbeIndex>
          <onix1:OrderByDepth>false</onix1:OrderByDepth>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OnixNeuropixelData</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SendMatOverSocket">
          <p1:Connection>AmpliferServer</p1:Connection>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT1S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timeout">
          <rx:DueTime>PT1M</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Materialize" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>NeuropixelStreamStopped</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Dematerialize" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Retry" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BaselineComparison</Name>
        <Description>Current to baseline signal floor comparison</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Scale>3.05176</dsp:Scale>
                <dsp:Shift>-6250.00448</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>30000</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>0</dsp:StartRow>
                <dsp:EndRow xsi:nil="true" />
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FrequencyFilter">
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:Cutoff1>300</dsp:Cutoff1>
                <dsp:Cutoff2>6000</dsp:Cutoff2>
                <dsp:KernelLength>3000</dsp:KernelLength>
                <dsp:FilterType>BandPass</dsp:FilterType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Reduce">
                <dsp:Axis>0</dsp:Axis>
                <dsp:Operation>Avg</dsp:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>60</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>6</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>NoiseDetection</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NoiseDetectionThreshold" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Format">
        <Format>Noise floor increased by {0} fold</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>3</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>NoiseDetected</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PolledBno055Data">
          <onix1:DeviceName>HeadstageNeuropixelsV2e/PolledBno055</onix1:DeviceName>
          <onix1:PolledRegisters>All</onix1:PolledRegisters>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Retry" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OnixBno055Data</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Calibration</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:HarpSyncInputData">
          <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OnixHarpSyncData</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:MemoryMonitorData">
          <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>PercentUsed</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OnixMemoryData</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PortStatus">
          <onix1:DeviceName>HeadstageNeuropixelsV2e/PortController</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OnixPortData</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="16" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>