<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorPirouetteDataSchema.Rig;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindBehaviorPirouetteDataSchema.Session;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindBehaviorPirouetteDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>..\local\AindBehaviorPirouetteTaskLogic.json</TaskLogicPath>
        <RigPath>..\local\AindBehaviorPirouetteRig.json</RigPath>
        <SessionPath>..\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorPirouetteRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindBehaviorPirouetteTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Onix</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix1:CreateContext">
                      <onix1:Driver>riffa</onix1:Driver>
                      <onix1:Index>0</onix1:Index>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
                      <onix1:Name>BreakoutBoard</onix1:Name>
                      <onix1:Heartbeat>
                        <onix1:DeviceName>BreakoutBoard/Heartbeat</onix1:DeviceName>
                        <onix1:DeviceAddress>0</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                        <onix1:BeatsPerSecond>1000</onix1:BeatsPerSecond>
                      </onix1:Heartbeat>
                      <onix1:AnalogIO>
                        <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
                        <onix1:DeviceAddress>6</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                        <onix1:InputRange0>TenVolts</onix1:InputRange0>
                        <onix1:InputRange1>TenVolts</onix1:InputRange1>
                        <onix1:InputRange2>TenVolts</onix1:InputRange2>
                        <onix1:InputRange3>TenVolts</onix1:InputRange3>
                        <onix1:InputRange4>TenVolts</onix1:InputRange4>
                        <onix1:InputRange5>TenVolts</onix1:InputRange5>
                        <onix1:InputRange6>TenVolts</onix1:InputRange6>
                        <onix1:InputRange7>TenVolts</onix1:InputRange7>
                        <onix1:InputRange8>TenVolts</onix1:InputRange8>
                        <onix1:InputRange9>TenVolts</onix1:InputRange9>
                        <onix1:InputRange10>TenVolts</onix1:InputRange10>
                        <onix1:InputRange11>TenVolts</onix1:InputRange11>
                        <onix1:Direction0>Input</onix1:Direction0>
                        <onix1:Direction1>Input</onix1:Direction1>
                        <onix1:Direction2>Input</onix1:Direction2>
                        <onix1:Direction3>Input</onix1:Direction3>
                        <onix1:Direction4>Input</onix1:Direction4>
                        <onix1:Direction5>Input</onix1:Direction5>
                        <onix1:Direction6>Input</onix1:Direction6>
                        <onix1:Direction7>Input</onix1:Direction7>
                        <onix1:Direction8>Input</onix1:Direction8>
                        <onix1:Direction9>Input</onix1:Direction9>
                        <onix1:Direction10>Input</onix1:Direction10>
                        <onix1:Direction11>Input</onix1:Direction11>
                      </onix1:AnalogIO>
                      <onix1:DigitalIO>
                        <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
                        <onix1:DeviceAddress>7</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                      </onix1:DigitalIO>
                      <onix1:ClockOutput>
                        <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
                        <onix1:DeviceAddress>5</onix1:DeviceAddress>
                        <onix1:ClockGate>false</onix1:ClockGate>
                        <onix1:Frequency>1000000</onix1:Frequency>
                        <onix1:DutyCycle>50</onix1:DutyCycle>
                        <onix1:Delay>0</onix1:Delay>
                      </onix1:ClockOutput>
                      <onix1:HarpInput>
                        <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
                        <onix1:DeviceAddress>12</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                        <onix1:Source>Breakout</onix1:Source>
                      </onix1:HarpInput>
                      <onix1:MemoryMonitor>
                        <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
                        <onix1:DeviceAddress>10</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                        <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
                      </onix1:MemoryMonitor>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix1:ConfigureHeadstageNeuropixelsV2e">
                      <onix1:Name>HeadstageNeuropixelsV2e</onix1:Name>
                      <onix1:NeuropixelsV2e>
                        <onix1:DeviceName>HeadstageNeuropixelsV2e/NeuropixelsV2e</onix1:DeviceName>
                        <onix1:DeviceAddress>256</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                        <onix1:ProbeConfigurationA>
                          <onix1:Probe>ProbeA</onix1:Probe>
                          <onix1:Reference>External</onix1:Reference>
                          <onix1:ChannelConfiguration>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</onix1:ChannelConfiguration>
                        </onix1:ProbeConfigurationA>
                        <onix1:GainCalibrationFileA>\\allen\aind\scratch\chronos\NP calibration files\23176516261\23176516261_gainCalValues.csv</onix1:GainCalibrationFileA>
                        <onix1:ProbeConfigurationB>
                          <onix1:Probe>ProbeB</onix1:Probe>
                          <onix1:Reference>External</onix1:Reference>
                          <onix1:ChannelConfiguration>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</onix1:ChannelConfiguration>
                        </onix1:ProbeConfigurationB>
                        <onix1:GainCalibrationFileB />
                      </onix1:NeuropixelsV2e>
                      <onix1:Bno055>
                        <onix1:DeviceName>HeadstageNeuropixelsV2e/PolledBno055</onix1:DeviceName>
                        <onix1:DeviceAddress>257</onix1:DeviceAddress>
                        <onix1:Enable>true</onix1:Enable>
                        <onix1:AxisMap>YZX</onix1:AxisMap>
                        <onix1:AxisSign>MirrorY MirrorX</onix1:AxisSign>
                      </onix1:Bno055>
                      <onix1:Port>PortA</onix1:Port>
                      <onix1:PortVoltage xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix1:StartAcquisition">
                      <onix1:ReadSize>2048</onix1:ReadSize>
                      <onix1:WriteSize>2048</onix1:WriteSize>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timer">
                        <rx:DueTime>PT0S</rx:DueTime>
                        <rx:Period>PT0.02S</rx:Period>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="onix1:PolledBno055Data">
                        <onix1:DeviceName>NeuropixelsV2eHeadstage/PolledBno055</onix1:DeviceName>
                        <onix1:PolledRegisters>All</onix1:PolledRegisters>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:PublishSubject">
                      <Name>OnixBno055Data</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix1:NeuropixelsV2eData">
                      <onix1:DeviceName>HeadstageNeuropixelsV2e/NeuropixelsV2e</onix1:DeviceName>
                      <onix1:BufferSize>30</onix1:BufferSize>
                      <onix1:ProbeIndex>ProbeA</onix1:ProbeIndex>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>OnixNeuropixelData</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix1:HarpSyncInputData">
                      <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>OnixHarpSyncData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Commutator</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OnixCommutator.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:CreateSerialPort">
                      <port:Name>Commutator</port:Name>
                      <port:PortName>COM4</port:PortName>
                      <port:BaudRate>9600</port:BaudRate>
                      <port:NewLine>\r\n</port:NewLine>
                      <port:Parity>None</port:Parity>
                      <port:ParityReplace>63</port:ParityReplace>
                      <port:DataBits>8</port:DataBits>
                      <port:StopBits>One</port:StopBits>
                      <port:Handshake>None</port:Handshake>
                      <port:DiscardNull>false</port:DiscardNull>
                      <port:DtrEnable>true</port:DtrEnable>
                      <port:RtsEnable>false</port:RtsEnable>
                      <port:ReadBufferSize>8192</port:ReadBufferSize>
                      <port:WriteBufferSize>2048</port:WriteBufferSize>
                      <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                    <rx:Name>CommutatorTurns</rx:Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionCondition">
                    <scr:Name>DropInvalid</scr:Name>
                    <scr:Expression>!(double.IsNan(it) or it==0 or double.IsInfinity(it))</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="DoubleProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{{turn : {0}}}</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>Commutator</port:PortName>
                      <port:NewLine>\r\n</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>OnixBno055Data</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:ObserveOn">
                        <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Quaternion</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:PublishSubject">
                      <Name>QuaternionData</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>RigSchema</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>OnixCommutator</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>AdditionalSettings</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>ImuCorrectionSampling</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="p4:TimeSpanFromSeconds" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Interval" />
                      </PropertyMappings>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>RigSchema</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>OnixCommutator</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>AdditionalSettings</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>ImuRotationAxis</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="RotationAxis" Selector="X,Y,Z" />
                      </PropertyMappings>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\AutoCommutator.bonsai">
                      <RotationAxis>
                        <X>0</X>
                        <Y>0</Y>
                        <Z>1</Z>
                      </RotationAxis>
                      <Interval>PT0.333S</Interval>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>CommutatorTurns</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CommutatorTurns</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>AccumulatedCommutatorTurns</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="24" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="24" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source3" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="29" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpOutputExpander</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpOutputExpander.bonsai">
                    <PortName>COM5</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpWhiteRabbit</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpWhiteRabbit.bonsai">
                    <PortName>COM3</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WhiteRabbitEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WhiteRabbitCommands</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OutputExpanderCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraController.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Cameras.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CamerasReady</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CameraState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Magnetometer.bonsai" />
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Defer">
          <Name>Logging</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>SessionSchema</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>RootPath</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Path" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogController.bonsai">
                <Path>data</Path>
                <ChunkSize>1</ChunkSize>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="Extensions\RobocopyRoutine.bonsai" />
              <Expression xsi:type="GroupWorkflow">
                <Name>CamerasLogger</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="rx:Defer">
                      <Name>CamerasLogger</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>CameraController</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Cameras</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Value.VideoWriter</Selector>
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                          <Expression xsi:type="p1:MatchVideoWriter">
                            <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterFfmpeg" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="rx:CreateObservable">
                            <Name>FfmpegWriter</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="rx:AsyncSubject">
                                  <Name>This</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>This</Name>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item2</Selector>
                                </Expression>
                                <Expression xsi:type="rx:AsyncSubject">
                                  <Name>ThisCameraName</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>This</Name>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item1</Selector>
                                </Expression>
                                <Expression xsi:type="rx:AsyncSubject">
                                  <Name>ThisWriter</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>CamerasStream</Name>
                                </Expression>
                                <Expression xsi:type="rx:Condition">
                                  <Workflow>
                                    <Nodes>
                                      <Expression xsi:type="WorkflowInput">
                                        <Name>Source1</Name>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Key</Selector>
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>ThisCameraName</Name>
                                      </Expression>
                                      <Expression xsi:type="PropertyMapping">
                                        <PropertyMappings>
                                          <Property Name="Value" />
                                        </PropertyMappings>
                                      </Expression>
                                      <Expression xsi:type="Equal">
                                        <Operand xsi:type="StringProperty" />
                                      </Expression>
                                      <Expression xsi:type="WorkflowOutput" />
                                    </Nodes>
                                    <Edges>
                                      <Edge From="0" To="1" Label="Source1" />
                                      <Edge From="1" To="4" Label="Source1" />
                                      <Edge From="2" To="3" Label="Source1" />
                                      <Edge From="3" To="4" Label="Source2" />
                                      <Edge From="4" To="5" Label="Source1" />
                                    </Edges>
                                  </Workflow>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Merge" />
                                </Expression>
                                <Expression xsi:type="ExternalizedMapping">
                                  <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name />
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>ChunkSize</Name>
                                </Expression>
                                <Expression xsi:type="PropertyMapping">
                                  <PropertyMappings>
                                    <Property Name="ChunkSize" />
                                  </PropertyMappings>
                                </Expression>
                                <Expression xsi:type="ExternalizedMapping">
                                  <Property Name="ClosingDuration" Category="GroupClosing" />
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="aeon:GroupByTime">
                                    <aeon:ChunkSize>1</aeon:ChunkSize>
                                    <aeon:ClosingDuration>PT30S</aeon:ClosingDuration>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>ThisWriter</Name>
                                </Expression>
                                <Expression xsi:type="PropertyMapping">
                                  <PropertyMappings>
                                    <Property Name="OutputArguments" Selector="OutputArguments" />
                                    <Property Name="InputArguments" Selector="InputArguments" />
                                    <Property Name="FrameRate" Selector="FrameRate" />
                                    <Property Name="Extension" Selector="ContainerExtension" />
                                  </PropertyMappings>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>ThisCameraName</Name>
                                </Expression>
                                <Expression xsi:type="PropertyMapping">
                                  <PropertyMappings>
                                    <Property Name="Name" />
                                  </PropertyMappings>
                                </Expression>
                                <Expression xsi:type="rx:CreateObservable">
                                  <Name>LogVideo</Name>
                                  <Workflow>
                                    <Nodes>
                                      <Expression xsi:type="WorkflowInput">
                                        <Name>Source1</Name>
                                      </Expression>
                                      <Expression xsi:type="rx:AsyncSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="Combinator">
                                        <Combinator xsi:type="rx:Merge" />
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Key</Selector>
                                      </Expression>
                                      <Expression xsi:type="ExternalizedMapping">
                                        <Property Name="Name" />
                                      </Expression>
                                      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                        <Name>VideoData</Name>
                                        <Extension>csv</Extension>
                                      </Expression>
                                      <Expression xsi:type="PropertyMapping">
                                        <PropertyMappings>
                                          <Property Name="FileName" />
                                        </PropertyMappings>
                                      </Expression>
                                      <Expression xsi:type="io:CsvWriter">
                                        <io:Append>false</io:Append>
                                        <io:Overwrite>false</io:Overwrite>
                                        <io:Suffix>None</io:Suffix>
                                        <io:IncludeHeader>true</io:IncludeHeader>
                                        <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Value.Image</Selector>
                                      </Expression>
                                      <Expression xsi:type="ExternalizedMapping">
                                        <Property Name="OutputArguments" />
                                        <Property Name="InputArguments" />
                                        <Property Name="Verbosity" />
                                        <Property Name="FrameRate" />
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Key</Selector>
                                      </Expression>
                                      <Expression xsi:type="ExternalizedMapping">
                                        <Property Name="Extension" />
                                      </Expression>
                                      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                        <Name>VideoData</Name>
                                        <Extension>avi</Extension>
                                      </Expression>
                                      <Expression xsi:type="PropertyMapping">
                                        <PropertyMappings>
                                          <Property Name="FileName" />
                                        </PropertyMappings>
                                      </Expression>
                                      <Expression xsi:type="Combinator">
                                        <Combinator xsi:type="p4:FfmpegVideoWriter">
                                          <p4:Overwrite>false</p4:Overwrite>
                                          <p4:FrameRate>0</p4:FrameRate>
                                          <p4:Verbosity>Verbose</p4:Verbosity>
                                          <p4:OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full" -c:v h264_nvenc -pix_fmt nv12 -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -maxrate 700M -bufsize 350M</p4:OutputArguments>
                                          <p4:InputArguments>-colorspace rgb -color_primaries bt709 -color_trc linear</p4:InputArguments>
                                        </Combinator>
                                      </Expression>
                                    </Nodes>
                                    <Edges>
                                      <Edge From="0" To="1" Label="Source1" />
                                      <Edge From="2" To="3" Label="Source1" />
                                      <Edge From="3" To="9" Label="Source1" />
                                      <Edge From="4" To="5" Label="Source1" />
                                      <Edge From="5" To="7" Label="Source1" />
                                      <Edge From="6" To="7" Label="Source2" />
                                      <Edge From="6" To="15" Label="Source2" />
                                      <Edge From="7" To="8" Label="Source1" />
                                      <Edge From="8" To="9" Label="Source2" />
                                      <Edge From="9" To="10" Label="Source1" />
                                      <Edge From="10" To="17" Label="Source1" />
                                      <Edge From="11" To="17" Label="Source2" />
                                      <Edge From="12" To="13" Label="Source1" />
                                      <Edge From="13" To="15" Label="Source1" />
                                      <Edge From="14" To="15" Label="Source3" />
                                      <Edge From="15" To="16" Label="Source1" />
                                      <Edge From="16" To="17" Label="Source3" />
                                    </Edges>
                                  </Workflow>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Switch" />
                                </Expression>
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="3" To="4" Label="Source1" />
                                <Edge From="4" To="5" Label="Source1" />
                                <Edge From="6" To="7" Label="Source1" />
                                <Edge From="7" To="8" Label="Source1" />
                                <Edge From="9" To="10" Label="Source1" />
                                <Edge From="10" To="11" Label="Source1" />
                                <Edge From="11" To="12" Label="Source1" />
                                <Edge From="12" To="18" Label="Source1" />
                                <Edge From="13" To="14" Label="Source1" />
                                <Edge From="14" To="18" Label="Source2" />
                                <Edge From="15" To="16" Label="Source1" />
                                <Edge From="16" To="18" Label="Source3" />
                                <Edge From="17" To="18" Label="Source4" />
                                <Edge From="18" To="23" Label="Source1" />
                                <Edge From="19" To="20" Label="Source1" />
                                <Edge From="20" To="23" Label="Source2" />
                                <Edge From="21" To="22" Label="Source1" />
                                <Edge From="22" To="23" Label="Source3" />
                                <Edge From="23" To="24" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>CameraController</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Cameras</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Value.VideoWriter</Selector>
                          </Expression>
                          <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                          <Expression xsi:type="p1:MatchVideoWriter">
                            <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterOpenCv" />
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="rx:CreateObservable">
                            <Name>OpenCvWriter</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="rx:AsyncSubject">
                                  <Name>This</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>This</Name>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item2</Selector>
                                </Expression>
                                <Expression xsi:type="rx:AsyncSubject">
                                  <Name>ThisCameraName</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>This</Name>
                                </Expression>
                                <Expression xsi:type="MemberSelector">
                                  <Selector>Item1</Selector>
                                </Expression>
                                <Expression xsi:type="rx:AsyncSubject">
                                  <Name>ThisWriter</Name>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>CamerasStream</Name>
                                </Expression>
                                <Expression xsi:type="rx:Condition">
                                  <Workflow>
                                    <Nodes>
                                      <Expression xsi:type="WorkflowInput">
                                        <Name>Source1</Name>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Key</Selector>
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>ThisCameraName</Name>
                                      </Expression>
                                      <Expression xsi:type="PropertyMapping">
                                        <PropertyMappings>
                                          <Property Name="Value" />
                                        </PropertyMappings>
                                      </Expression>
                                      <Expression xsi:type="Equal">
                                        <Operand xsi:type="StringProperty" />
                                      </Expression>
                                      <Expression xsi:type="WorkflowOutput" />
                                    </Nodes>
                                    <Edges>
                                      <Edge From="0" To="1" Label="Source1" />
                                      <Edge From="1" To="4" Label="Source1" />
                                      <Edge From="2" To="3" Label="Source1" />
                                      <Edge From="3" To="4" Label="Source2" />
                                      <Edge From="4" To="5" Label="Source1" />
                                    </Edges>
                                  </Workflow>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Take">
                                    <rx:Count>1</rx:Count>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Merge" />
                                </Expression>
                                <Expression xsi:type="ExternalizedMapping">
                                  <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name />
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>ChunkSize</Name>
                                </Expression>
                                <Expression xsi:type="PropertyMapping">
                                  <PropertyMappings>
                                    <Property Name="ChunkSize" />
                                  </PropertyMappings>
                                </Expression>
                                <Expression xsi:type="ExternalizedMapping">
                                  <Property Name="ClosingDuration" Category="GroupClosing" />
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="aeon:GroupByTime">
                                    <aeon:ChunkSize>1</aeon:ChunkSize>
                                    <aeon:ClosingDuration>PT30S</aeon:ClosingDuration>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>ThisWriter</Name>
                                </Expression>
                                <Expression xsi:type="PropertyMapping">
                                  <PropertyMappings>
                                    <Property Name="Extension" Selector="ContainerExtension" />
                                    <Property Name="FrameRate" Selector="FrameRate" />
                                    <Property Name="FourCC" Selector="FourCc" />
                                  </PropertyMappings>
                                </Expression>
                                <Expression xsi:type="SubscribeSubject">
                                  <Name>ThisCameraName</Name>
                                </Expression>
                                <Expression xsi:type="PropertyMapping">
                                  <PropertyMappings>
                                    <Property Name="Name" />
                                  </PropertyMappings>
                                </Expression>
                                <Expression xsi:type="rx:CreateObservable">
                                  <Name>LogVideo</Name>
                                  <Workflow>
                                    <Nodes>
                                      <Expression xsi:type="WorkflowInput">
                                        <Name>Source1</Name>
                                      </Expression>
                                      <Expression xsi:type="rx:AsyncSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="Combinator">
                                        <Combinator xsi:type="rx:Merge" />
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Key</Selector>
                                      </Expression>
                                      <Expression xsi:type="ExternalizedMapping">
                                        <Property Name="Name" />
                                      </Expression>
                                      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                        <Name>VideoData</Name>
                                        <Extension>csv</Extension>
                                      </Expression>
                                      <Expression xsi:type="PropertyMapping">
                                        <PropertyMappings>
                                          <Property Name="FileName" />
                                        </PropertyMappings>
                                      </Expression>
                                      <Expression xsi:type="io:CsvWriter">
                                        <io:Append>false</io:Append>
                                        <io:Overwrite>false</io:Overwrite>
                                        <io:Suffix>None</io:Suffix>
                                        <io:IncludeHeader>true</io:IncludeHeader>
                                        <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Value.Image</Selector>
                                      </Expression>
                                      <Expression xsi:type="SubscribeSubject">
                                        <Name>Data</Name>
                                      </Expression>
                                      <Expression xsi:type="MemberSelector">
                                        <Selector>Key</Selector>
                                      </Expression>
                                      <Expression xsi:type="ExternalizedMapping">
                                        <Property Name="Extension" />
                                      </Expression>
                                      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                        <Name>VideoData</Name>
                                        <Extension>avi</Extension>
                                      </Expression>
                                      <Expression xsi:type="PropertyMapping">
                                        <PropertyMappings>
                                          <Property Name="FileName" />
                                        </PropertyMappings>
                                      </Expression>
                                      <Expression xsi:type="ExternalizedMapping">
                                        <Property Name="FourCC" />
                                        <Property Name="FrameRate" />
                                      </Expression>
                                      <Expression xsi:type="Combinator">
                                        <Combinator xsi:type="cv:VideoWriter">
                                          <cv:Suffix>None</cv:Suffix>
                                          <cv:Buffered>true</cv:Buffered>
                                          <cv:Overwrite>false</cv:Overwrite>
                                          <cv:FourCC>FMP4</cv:FourCC>
                                          <cv:FrameRate>30</cv:FrameRate>
                                          <cv:FrameSize>
                                            <cv:Width>0</cv:Width>
                                            <cv:Height>0</cv:Height>
                                          </cv:FrameSize>
                                          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                                        </Combinator>
                                      </Expression>
                                    </Nodes>
                                    <Edges>
                                      <Edge From="0" To="1" Label="Source1" />
                                      <Edge From="2" To="3" Label="Source1" />
                                      <Edge From="3" To="9" Label="Source1" />
                                      <Edge From="4" To="5" Label="Source1" />
                                      <Edge From="5" To="7" Label="Source1" />
                                      <Edge From="6" To="7" Label="Source2" />
                                      <Edge From="6" To="14" Label="Source2" />
                                      <Edge From="7" To="8" Label="Source1" />
                                      <Edge From="8" To="9" Label="Source2" />
                                      <Edge From="9" To="10" Label="Source1" />
                                      <Edge From="10" To="17" Label="Source1" />
                                      <Edge From="11" To="12" Label="Source1" />
                                      <Edge From="12" To="14" Label="Source1" />
                                      <Edge From="13" To="14" Label="Source3" />
                                      <Edge From="14" To="15" Label="Source1" />
                                      <Edge From="15" To="17" Label="Source2" />
                                      <Edge From="16" To="17" Label="Source3" />
                                    </Edges>
                                  </Workflow>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="rx:Switch" />
                                </Expression>
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="3" To="4" Label="Source1" />
                                <Edge From="4" To="5" Label="Source1" />
                                <Edge From="6" To="7" Label="Source1" />
                                <Edge From="7" To="8" Label="Source1" />
                                <Edge From="9" To="10" Label="Source1" />
                                <Edge From="10" To="11" Label="Source1" />
                                <Edge From="11" To="12" Label="Source1" />
                                <Edge From="12" To="18" Label="Source1" />
                                <Edge From="13" To="14" Label="Source1" />
                                <Edge From="14" To="18" Label="Source2" />
                                <Edge From="15" To="16" Label="Source1" />
                                <Edge From="16" To="18" Label="Source3" />
                                <Edge From="17" To="18" Label="Source4" />
                                <Edge From="18" To="23" Label="Source1" />
                                <Edge From="19" To="20" Label="Source1" />
                                <Edge From="20" To="23" Label="Source2" />
                                <Edge From="21" To="22" Label="Source1" />
                                <Edge From="22" To="23" Label="Source3" />
                                <Edge From="23" To="24" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Merge" />
                          </Expression>
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="2" To="6" Label="Source1" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="7" Label="Source1" />
                          <Edge From="6" To="7" Label="Source2" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="10" To="11" Label="Source1" />
                          <Edge From="11" To="12" Label="Source1" />
                          <Edge From="12" To="13" Label="Source1" />
                          <Edge From="12" To="16" Label="Source1" />
                          <Edge From="13" To="14" Label="Source1" />
                          <Edge From="14" To="15" Label="Source1" />
                          <Edge From="15" To="17" Label="Source1" />
                          <Edge From="16" To="17" Label="Source2" />
                          <Edge From="17" To="18" Label="Source1" />
                          <Edge From="18" To="19" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpLogging.bonsai" />
              <Expression xsi:type="IncludeWorkflow" Path="Extensions\CommutatorLogging.bonsai" />
              <Expression xsi:type="IncludeWorkflow" Path="Extensions\OnixLogging.bonsai" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>